// 1. getcoords() 获取每个segment的中间点3d坐标 及其 间室方向向量，并赋给胞外机制x_xtra, y_xtra, z_xtra, Dx_xtra, Dy_xtra, Dz_xtra
// 2. getSecRefs() 设置section胞外机制
//                 a) assign_section_types() 指定每个segment的形态类型type，1-7
//                 b) 指定分支/附属的顺序 assign_order()：宽度优先算法，深度增加一层顺序+1, 1-n
//                                        assign_order2(): 深度优先算法，遇到分支则顺序+1, 1-n
//                                        根节点soma不用指定顺序，因为是最开始的

// original data, irregularly spaced
objref xx, yy, zz, length
// interpolated data, spaced at regular intervals
objref xint, yint, zint, range

objref xList, yList, zList
xList = new List()
yList = new List()
zList = new List()

// 用xtra机制存储每个section下segment的3d位置信息（x_xtra, ），以及每个segment的方向向量(Dx_xtra, )
proc getcoords() { local ii, nn, kk, xr, xr1
	// list of segment coordinates from each section		
	xList.remove_all()  // 移除所有内容，返回0
	yList.remove_all()
	zList.remove_all()	
	// forall 遍历所有section
	forall {
	  if (ismembrane("xtra")) {	  	
		// get the data for the section		
		nn = n3d()		// number of pt3d() points，存储3d位置信息的个数，segment位置信息通过3d信息插值得到
		xx = new Vector(nn) //creates xx vector length of nn
		yy = new Vector(nn)
		zz = new Vector(nn)
		length = new Vector(nn) 		
		for ii = 0,nn-1 {					
			xx.x[ii] = x3d(ii) // loops through points in sec, assigns x coordinate to xx
			yy.x[ii] = y3d(ii) // assigns y coordinates to yy
			zz.x[ii] = z3d(ii) // assigns z coordinates to zz
			length.x[ii] = arc3d(ii) // length position of point 不规则间隔的三维信息
		}

		// to use Vector class's .interpolate() 
		// must first scale the independent variable
		// i.e. normalize length along centroid
		length.div(length.x[nn-1]) // 按section长度 L 归一化，返回x, (0, 1)

		// initialize the destination "independent" vector
		range = new Vector(nseg+2) //nseg+2 because counts centers of each seg + 0 and 1 存储每个segment的中心位置nseg，以及起始0，和结尾1
		range.indgen(1/nseg)  //stepsize is 1/nseg, normalized to go from 0 to 1 填充值(0, size-1)*1/nseg, 即[0, 1/nseg, 2/nseg, ..., 1, 1+1/nseg]
		range.sub(1/(2*nseg)) // 第二个 —— 倒数第二个元素存储着每个segment中点归一化位置信息
		range.x[0]=0          // 第一个元素为0，section起始位置
		range.x[nseg+1]=1     // 最后一个元素为1，section终止位置， 规则的三维信息，通过length线性插值获得具体的3d locations

		// length contains the normalized distances of the pt3d points 
		// along the centroid of the section.  These are spaced at 
		// irregular intervals.
		// range contains the normalized distances of the nodes along the 
		// centroid of the section.  These are spaced at regular intervals.
		// Ready to interpolate.

		xint = new Vector(nseg+2) 
		yint = new Vector(nseg+2)
		zint = new Vector(nseg+2)
		xint.interpolate(range, length, xx) // 通过线性插值获得每个section中segment的x3d位置信息
		yint.interpolate(range, length, yy)
		zint.interpolate(range, length, zz)

		// 指定每个间室的胞外位置信息，
		// for each node, assign the xyz values to x_xtra, y_xtra, z_xtra
		//		for ii = 0, nseg+1 {
		// don't bother computing coords of the 0 and 1 ends
		// also avoid writing coords of the 1 end into the last internal node's coords		
		// Calculate first compartment seperately 单独计算第一个间室坐标
		xr1 = range.x[1]
		x_xtra(xr1) = xint.x[1]
		y_xtra(xr1) = yint.x[1]
		z_xtra(xr1) = zint.x[1]
		
		if (nseg == 1) { // use central diff with 2 pt3d coordinates if nseg == 1 
			// Gets rewritten in calc_pseudo_es using parent section's last coordinate
			Dx_xtra(0.5)  = x3d(nn-1) - x3d(0)
			Dy_xtra(0.5)  = y3d(nn-1) - y3d(0)
			Dz_xtra(0.5)  = z3d(nn-1) - z3d(0)			
		} else { // Use backward difference with first pt3d coordinate 每个间室的方向向量，相对于每个section的起始3d位置
			Dx_xtra(xr1) = x_xtra(xr1) - x3d(0) // 第一个间室
			Dy_xtra(xr1) = y_xtra(xr1) - y3d(0)
			Dz_xtra(xr1) = z_xtra(xr1) - z3d(0)

			for ii = 2, nseg {	 // 第2-n个间室	
				xr = range.x[ii] // 每个间室的中心归一化位置 x[i]
				xr_i = range.x[ii-1] // 前一个间室的中心归一化位置 x[i-1]
				x_xtra(xr) = xint.x[ii] //save section coordinates using xtra mechanism
				y_xtra(xr) = yint.x[ii]
				z_xtra(xr) = zint.x[ii]
				// Use backward difference to get components of compartment directional vector
				Dx_xtra(xr) = x_xtra(xr) - x_xtra(xr_i)
				Dy_xtra(xr) = y_xtra(xr) - y_xtra(xr_i)
				Dz_xtra(xr) = z_xtra(xr) - z_xtra(xr_i)					
			}
		}				

		// remove coords of 0 and 1 ends before adding to coord list 移除非segment信息
		// for exporting to text file
		
		xint.remove(nseg+1)
		xint.remove(0)
		yint.remove(nseg+1)
		yint.remove(0)
		zint.remove(nseg+1)
		zint.remove(0)
				

		xList.append(xint) //add section's interpolated coordinates to list 
		yList.append(yint)
		zList.append(zint)		
	  }	  
	}
}

numSect = 1 // set to 1 if nothing has been run 
numRecord = 1 // set to 1 if nothing has been run
numComp = 1 // set to 1 if nothing has been run 

//objref sect[numSect] // sectionref for determining termination
objref secrefs
proc getSecRefs(){ local secnum 
	getcoords()
	numSect = xList.count()
	secrefs = new List()
	secnum = 0 // count number of sections
	numComp = 0 // count number of compartments
	forall {
		if (ismembrane("xtra")){ // only create for sections with xtra mechanism			
			secrefs.append(new SectionRef()) // 定义指向section的指针/引用
			secnum += 1 // increment secnum
			numComp += nseg // keep track of number of compartments of model
		}
	}	
	assign_section_types() // now that secrefs has been created, assign type_xtra field in each section	
	if (NSTACK_size < 100000) {
		assign_order() // use normal breadth-first algorithm, only works on binary tree 宽度优先算法：保留全部节点，速度快，占用空间大
	} else {
		assign_order2() // use depth-first tree traversal, works for any tree, but requires NSTACK > 1000 for most cells 深度优先算法，有出入栈操作，速度慢，占用空间小，但需要堆栈空间
	}		
}
// Get space constant at x
func Lambda() { // input relative position x in section
	lambda = 10*sqrt( ((1/g_pas($1))*diam($1)*1e-4)/(4*Ra) ) // returns length constant in mm
	return lambda
}
// Get 1st order time constant at x
func Tau() { // input relative position x in section
	tau = (1/g_pas($1))*cm*1e-3 // returns time constant in ms
	return tau
}
/*
1 = soma (no parent)
2 = termination from non-bifurcation (parent is a 1,3, or 6) OR far from bifurcation (parent is 4 or 7, L > length constant) ** contains termination point (1) ** 
3 = intermediate from non-bifurcation (parent is 1,3, or 6)
4 = parent side of bifurcation (child is a 5,6, or 7) (parent is 3 OR far from bifurcation (4 or 7)) ** contains parent side bifurcation point (1)** 
5 = child termination from bifurcation (parent is a 1 or 4 and L < length constant) ** contains termination point (1)** 
6 = child side of bifurcation (parent is a 1 or 4) **contains child side bifurcation point (0)**
7 = parent bifurcation and child of bifurcation (parent is a 1 or 4, child is a 5,6, or 7) ** contains parent side bifurcation point (1) **
*/
proc assign_section_types(){ localobj parent_sec// assign morphological type to section center as part of xtra (type_xtra)
	for i=0,numSect-1 {
		//access secrefs.o(i).sec		
		if (secrefs.o(i).has_trueparent() == 0) { // Soma/root section o- 判断是不是根节点， secrefs.o(i)表示第i个Section
			secrefs.o(i).sec.type_xtra = 1 // assigns to 0.5 by default, but is always uniform for each section, so doesn't matter 			
		} else { // not root section 非根节点			
			secrefs.o(i).parent() {
				parent_sec = new SectionRef()
				parent_nchildren = parent_sec.nchild() // 返回每一个非root节点的子节点个数
			}
			secrefs.o(i).sec {
				Li = L
				if (ismembrane("pas")) {
					Lambdai = Lambda(1)*1000
				} else {
					Lambdai = L
				}
				nn = nseg 
			}
			if (parent_nchildren == 1) { // intermediate section -=- 判断有无兄弟节点（具有一个父节点）
				if (secrefs.o(i).nchild() == 0) { 
					// **normal termination** -= 叶子节点，即有父节点，没有子节点，不分叉
					for ix=1,nn {secrefs.o(i).sec.type_xtra((2*ix-1)/(2*nn)) = 3} // all intermediate compartments, except last 每个segment的中心点				
					secrefs.o(i).sec.type_xtra(1) = 2 // termination from intermediate section, not bifurcation 不分叉，即有终点		
				} else if (secrefs.o(i).nchild() == 1) {
					// **normal intermediate** -=- 具有父节点和一个子节点
					for ix=1,nn {secrefs.o(i).sec.type_xtra((2*ix-1)/(2*nn)) = 3}// all intermediate, not adjacent to bifurcation or a termination，没有终点
				} else { // nchild >= 2
					// **bifurcation** -=<
					for ix=1,nn {secrefs.o(i).sec.type_xtra((2*ix-1)/(2*nn)) = 3}					
					secrefs.o(i).sec.type_xtra(1) = 4 // parent of a bifurcation
				}
			} else { // child of bifurcation -≤ 
				if (secrefs.o(i).nchild() == 0) { 
					// **bifurcation -> termination** -≤
					if (Li <= Lambdai) { // for Blue-brain, 40 µm <= L < 160 µm (geom_nseg(40))
						for ix=1,nn {secrefs.o(i).sec.type_xtra((2*ix-1)/(2*nn)) = 3} // set intermediate compartments first
						secrefs.o(i).sec.type_xtra(0) = 6 // first compartment child side of bifurcation
 						secrefs.o(i).sec.type_xtra(1) =  5  // if nseg = 1, section will get set to 5 last
					} else { // L > length constant at terminal (terminal is farther from bifurcation)
						for ix=1,nn {secrefs.o(i).sec.type_xtra((2*ix-1)/(2*nn)) = 3} // set intermediate compartments first
						secrefs.o(i).sec.type_xtra(0) = 6 // first compartment child side of bifurcation
 						secrefs.o(i).sec.type_xtra(1) =  2 // termination of intermediate (far from bifurcation/non-bifurcation)
					}
				} else if (secrefs.o(i).nchild() == 1) {
					// **bifurcation -> intermediate** -≤=
					for ix=1,nn {secrefs.o(i).sec.type_xtra((2*ix-1)/(2*nn)) = 3} // all intermediate compartments, except first one
					secrefs.o(i).sec.type_xtra(0) = 6 // first compartment child side of bifurcation
				} else { // nchild >= 2
					// **bifurcation -> bifurcation** -≤<
					if (Li <= Lambdai) {	
						for ix=1,nn {secrefs.o(i).sec.type_xtra((2*ix-1)/(2*nn)) = 3}
						secrefs.o(i).sec.type_xtra(0) = 6 // first compartment child side of bifurcation
						secrefs.o(i).sec.type_xtra(1) = 7 // parent of a bifurcation
					} else { // L > length constant (bifurcation is far from parent bifurcation)
						for ix=1,nn {secrefs.o(i).sec.type_xtra((2*ix-1)/(2*nn)) = 3}						
						secrefs.o(i).sec.type_xtra(0) = 6 //first compartment child side of bifurcation
						secrefs.o(i).sec.type_xtra(1) = 4 // parent of a bifurcation from intermediate (NOT from bifurcation)
					}
				}
			} 
		}		
	 }
	 //print "Assigned section types to each section in type_xtra"
}

// 宽度优先算法，深度增加一层顺序+1
proc assign_order(){ local i localobj oseci, oseci_c, oseci_secref
	access secrefs.o(0).sec // access soma
	i=1
	end_loop=0
	oseci = new SectionList() 	
	oseci.children() // append children of soma
	while (end_loop==0) {	
		nchildren = 0	
		oseci_c = new SectionList()		// children of ith children
		forsec oseci { // 依次遍历每一层(or 每一代)section
			//print "order = ", i, " ", secname()
			order_xtra = i // ith order 指定每个section的顺序
			oseci_secref = new SectionRef() // 依次指向第i代中的section
			nchildren += oseci_secref.nchild 
			oseci_c.children() // append children of ith order sections (i+1)			
		}		
		oseci = oseci_c // access children of ith order for next loop
		i = i+1 // increment order i
		if (nchildren ==0) end_loop = 1 // exit loop	当没有下一代时退出，即遍历到最后一层			
	}
	//print "Assigned branch orders using depth first algorithm (assign_order) in order_xtra"
}

// 深度优先算法， 遇到分支则顺序+1
proc assign_order2() { local i,n localobj oseci_secref
	access secrefs.o(0).sec // access soma
	i = 1 // start order at 1					
	for n = 0, secrefs.o(0).nchild() - 1 {		
		secrefs.o(0).child[n] {
			oseci_secref = new SectionRef()
			traverse_tree(i,oseci_secref)
			//print "n = ", n, "in section", secname()
		}		
	}	
	//print "Assigned branch orders using traverse_tree (assign_order2) in order_xtra"
}
proc traverse_tree() { local j, order localobj current_secref, child_secref,parent_secref
	order = $1
	current_secref = $o2 // 输入是object， $s2树突是string
	current_secref.sec.order_xtra = order // assign order to currently access section
	/*
	current_secref.sec {		
		print " "
		print secname()
	}
	*/	
	if (current_secref.nchild == 0) { // 没有子节点，判断有没有兄弟节点
		/*		
		current_secref.sec {
			printf("Reached terminal at %s, order is %g\n",secname(),current_secref.sec.order_xtra)
		}
		*/				
		// return to most recent branch point
		not_branch = 1
		while (not_branch==1) {
			current_secref.parent {				
				current_secref = new SectionRef()				
				if (current_secref.nchild>1) {
					not_branch = 0 	// 有兄弟节点				
					//print "exiting while"
				} else {					
					order -= 1      
					//print "still in while"
				}
			}
		}
	} else if (current_secref.nchild() == 1) {	// 有一个子节点
		/*
		current_secref.sec {
			printf("1 Child at %s, order is %g\n",secname(),current_secref.sec.order_xtra)
		}
		*/							
		current_secref.child[0] {
			current_secref = new SectionRef()			
		}		
		traverse_tree(order,current_secref)		
	} else { // 2 or more children 有多个子节点
		/*
		current_secref.sec {
			printf("%g Children in %s, order is %g\n",current_secref.nchild(),secname(),current_secref.sec.order_xtra)
		}
		*/		
		order += 1 // advance order by 1		
		for j = 0, current_secref.nchild() - 1 {
			current_secref.child[j] {
				child_secref = new SectionRef()				
				//child_secref.sec {print secname(), " order = ", order_xtra, "new order = ", order}
			}
			traverse_tree(order,child_secref)
		}
	}
}

